PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = u'../../data/personal/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'age': '25', 'gender': 'male'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = deg
  Window size (pixels) = [1536, 864]
  expName = v0
  keyboardBackend = PsychToolbox
  runMode = 0
  rush = True
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Routines
  Routine Instruction
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  Routine Fixation
    RoutineSettingsComponent Fixation
      stopVal [duration (s)] = 0.6
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    PolygonComponent FixationShape
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Stimulus
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    CodeComponent TextureBorder
      Code Type = Py
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      Before Experiment:
        from psychopy import visual
        import numpy as np
        import yaml
        import os
        import math
        import pandas as pd
        import itertools

        # Get Experimental Info
        ExpInfo_path = os.path.join(os.path.dirname(__file__), '../ExpInfo.yaml')
        with open(ExpInfo_path, 'r') as f:
            ExpInfo = yaml.safe_load(f)

        StimInfo = ExpInfo["Stimulus"]
      Begin Experiment:
        # Set parameters
        nReps = ExpInfo["Procedure&Conditions"]["NumberOfRepetitions"]
        seed = ExpInfo["Procedure&Conditions"]["RandomSeed"]
        n_rows = StimInfo["Grid"]["Rows"]
        n_col = StimInfo["Grid"]["Columns"]
        vertical_seperation = StimInfo["VerticalSeperation_degrees"]
        frequency = StimInfo["GaborPatch"]["SpatialFrequency_cpd"] # cycles per degree
        mitchell_contrast = StimInfo["GaborPatch"]["MitchellContrast"]
        duration = StimInfo["GaborPatch"]["Duration_s"]
        sigma = StimInfo["GaborPatch"]["Sigma_degrees"] # degrees
        spacing = StimInfo["GaborPatch"]["PatchSize_sigma"] * sigma  # degrees
        jitter_amount = StimInfo["Jitter"]["Range_sigma"] * sigma  # max jitter in degrees
        session_index = int(expInfo["session"]) - 1 # starts with "001"
        if len(StimInfo["GaborPatch"]["Orientation_degrees"]) <= session_index:
            raise TypeError("Number of orientations <= session number.")
        else:
            orientation = StimInfo["GaborPatch"]["Orientation_degrees"][session_index]

        # Create and save conditions sequence
        conditions = list(itertools.product(n_rows, StimInfo["HorizontalDisplacement_rows"]))
        conditions_df = pd.DataFrame(conditions, columns=['n_row', 'displacement_rows'])
        conditions_df['session'] = session_index
        conditions_df['orientation_degrees'] = orientation
        filename = 'conditions.csv'
        if os.path.exists(filename):
            # Append without header
            conditions_df.to_csv(filename, mode='a', header=False, index=False)
        else:
            # Create new file with header
            conditions_df.to_csv(filename, index=False)

        # Pre-compute timing
        refresh_rate = win.getActualFrameRate() # Hz
        stimulus_frames = math.floor(refresh_rate * duration)

        # Pre-Compute stimuli
        base_xys = {}
        gabor_arrays = {}
        for n_row_ in n_rows: # name n_row_ to avoid overwriting trial loop n_row condition
            # Pre-compute grid
            xs = np.linspace(-spacing * (n_col-1) / 2, spacing * (n_col-1) / 2, n_col)
            ys = np.linspace(0.0, spacing*(n_row_-1), n_row_)
            xys_upper = np.array([(x, y + vertical_seperation / 2) for y in ys for x in xs])
            xys_lower = np.array([(x, - y - vertical_seperation / 2) for y in ys for x in xs])
            xys = np.concatenate([xys_upper, xys_lower])
            base_xys[n_row_] = xys

            # Pre-compute orientations
            oris_upper = np.full((n_row_, n_col), orientation)
            oris_upper[:, n_col // 2 :] += 90
            oris_lower = np.full((n_row_, n_col), orientation)
            oris_lower[:, : n_col // 2] += 90
            oris = np.concatenate([oris_upper.flatten(), oris_lower.flatten()])

            # Pre-compute Gabor patches
            gabor_array = visual.ElementArrayStim(
                win=win,
                units='deg',
                nElements= 2 * n_row_ * n_col,
                elementTex='sin',
                elementMask='gauss',
                xys=xys,
                sizes=spacing,
                sfs=frequency,
                oris=oris,
                contrs=mitchell_contrast
            )
            gabor_arrays[n_row_] = gabor_array
      Begin Routine:
        # Decide for stimulus
        gabor_array = gabor_arrays[n_row]

        # Randomize locations
        jitter = np.random.uniform(-jitter_amount, jitter_amount,
                                   size=(2 * n_row * n_col, 2))
        gabor_array.xys = base_xys[n_row] + jitter
        gabor_array.xys[:n_row * n_col] += spacing * displacement_rows

        # Randomize phases
        # gabor_array.phases = np.random.uniform(0, 360, size=2 * n_rows * n_cols)
      Each Frame:
        if frameN < stimulus_frames:
            gabor_array.draw()
    KeyboardComponent SubjectResponse
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent Mask
      disabled = True
      fillColor = 0, 0, 0
      lineColor = 0, 0, 0
      shape = rectangle
      size = (15, 10)
      startVal [time (s)] = 0.15
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    PolygonComponent DummyShape
      contrast = 0.
      fillColor = white
      opacity = 0.
      saveStartStop = False
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardMonkeyComponent keyMonkey plugin="psychopy-monkeys"
      comp = SubjectResponse
      pressKey = left
      pressMode = both
      saveStartStop = False
      startVal [time (s)] = 0.01
      stopVal [duration (s)] = 0.02
      syncScreenRefresh = False
  Routine Wait
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    KeyboardComponent AnyButton
      allowedKeys = None
      forceEndRoutine = True
      startVal [time (s)] = 0.
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    TextComponent PressAnyButtonText
      letterHeight = 1.5
      startVal [time (s)] = 0
      text = Press any button.
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    KeyboardMonkeyComponent keyMonkey_2 plugin="psychopy-monkeys"
      comp = AnyButton
      pressKey = space
      pressMode = both
      saveStartStop = False
      startVal [time (s)] = 0.01
      stopVal [duration (s)] = 0.02
      syncScreenRefresh = False
  Routine Break
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    TextComponent TakeABreakText
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      text = Take a break!
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    KeyboardComponent WaitForEsc
      allowedKeys = 'esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = nReps
    random seed = seed
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    conditions:
      [OrderedDict([('n_row', np.int64(1)), ('displacement_rows', np.float64(1.0)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(1)), ('displacement_rows', np.float64(0.5)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(1)), ('displacement_rows', np.float64(0.0)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(1)), ('displacement_rows', np.float64(-0.5)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(1)), ('displacement_rows', np.float64(-1.0)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(12)), ('displacement_rows', np.float64(1.0)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(12)), ('displacement_rows', np.float64(0.5)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(12)), ('displacement_rows', np.float64(0.0)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(12)), ('displacement_rows', np.float64(-0.5)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))]),
      OrderedDict([('n_row', np.int64(12)), ('displacement_rows', np.float64(-1.0)), ('session', np.int64(0)), ('orientation_degrees', np.int64(0))])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
    Routine Fixation
    Routine Stimulus
    Routine Wait
  LoopTerminator trials
  Routine Break
