PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = u'../../data/%s/ID%sS%s_%s_%s_%s/ID%sS%s_%s_%s_%s' % (expInfo['save_in'], expInfo['ID'], expInfo['session'], expInfo['surname'], expInfo['first_name'], expInfo['date'], expInfo['ID'], expInfo['session'], expInfo['surname'], expInfo['first_name'], expInfo['date'])
  Experiment info = {'monitor_type': 'HP ProBook 450 G8 Notebook PC', 'mean_luminance_cdpm2': 'unknown', 'viewing_distance_cm': '60', 'save_in': 'personal', 'session': '01', 'session_to_load': 'none', 'ID': '001', 'first_name': 'Kai', 'surname': 'Rothe', 'age': '25', 'gender': 'male', 'visual_acuity_left_dpt': 'approx. -2 to -3', 'visual_acuity_right_dpt': 'approx. -2 to -3', 'visual_acuity_corrected': 'True', 'handedness': 'unknown', 'eye_dominance': 'unknown', 'diseases': 'unknown', 'subject_comments': '', 'skip_instructions': 'False', 'skip_training': 'False', 'skip_testing': 'False', 'monkey_mode': 'False'}
  Full-screen window = True
  Monitor = HP ProBook 450 G8 Notebook PC
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2025.1.1
  Window size (pixels) = [1920, 1080]
  expName = experiment
  keyboardBackend = PsychToolbox
  runMode = 1
  rush = True
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Routines
  Routine Preparation
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    CodeComponent GetExperimentalInfo
      Code Type = Py
      Before Experiment:
        import yaml
        from numpy.random import default_rng
        import math
        import pandas as pd
        import itertools
        import atexit
        import shutil
        from datetime import datetime
        import questplus
        import json
        import pickle
        import random

        # Parameters loaded / calculated from file
        ExpInfo_path = os.path.join(os.path.dirname(__file__), '../ExpInfo.yaml')
        with open(ExpInfo_path, 'r') as f:
            ExpInfo = yaml.safe_load(f)

        StimInfo = ExpInfo["Stimulus"]

        nTrials_test = ExpInfo["Procedure&Conditions"]["NumberOfTrials"]
        nTrials_train = ExpInfo["Procedure&Conditions"]["NumberOfPracticeTrials"]
        track_time = ExpInfo["Procedure&Conditions"]["MaxTime_min"] is not None
        if track_time:
            MAX_TIME_s = 60 * ExpInfo["Procedure&Conditions"]["MaxTime_min"] # s
            practice_start_time_s = None


        seed = ExpInfo["Procedure&Conditions"]["RandomSeed"]
        if seed is not None:
            raise Warning("Should randomize over subjects and sessions.")
        else:
            now = datetime.now()
            # times of seconds since Jan 1, 1970 UTC
            # * 1000000 to get microsecond variability
            # modulo 2**31 to avoid overflow
            # int32 since required type of seed for numpy
            seed = np.int32(int(datetime.now().timestamp() * 1000000) % (2**31))  # e.g., 20251208143052
            rng = default_rng(seed)
            ExpInfo["Procedure&Conditions"]["RandomSeed"] = int(seed)

        frequency = StimInfo["GaborPatch"]["SpatialFrequency_cpd"] # cycles per degree
        orientations_degrees = StimInfo["GaborPatch"]["Orientation_degrees"] # degrees
        mitchell_contrast = StimInfo["GaborPatch"]["MitchellContrast"]
        sigma = StimInfo["GaborPatch"]["Sigma_degrees"] # degrees
        assert StimInfo["GaborPatch"]["PatchSize_sigma"] == 6, "Gabor patch size must be 6 sigma"
        spacing = StimInfo["GaborPatch"]["PatchSize_sigma"] * sigma  # degrees
        jitter_amount = StimInfo["Jitter"]["Range_sigma"] * sigma  # max jitter in degrees

        n_rows = StimInfo["Grid"]["Rows"]
        vertical_seperation = StimInfo["VerticalSeperation_degrees"] # degrees

        x_eccentricity_degrees = StimInfo["Eccentricity_degrees"]["x"] # degrees
        y_eccentricity_degrees = StimInfo["Eccentricity_degrees"]["y"] # degrees

        displacement_range_cols = [StimInfo["HorizontalDisplacement_cols"]["Minimum"], StimInfo["HorizontalDisplacement_cols"]["Maximum"]] # columns
        displacement_step_cols = StimInfo["HorizontalDisplacement_cols"]["StepSize"] # columns
        displacements_cols = np.arange(displacement_range_cols[0], displacement_range_cols[1] + displacement_step_cols, displacement_step_cols)

        fixation_shape = StimInfo["Fixation"]["Shape"]
        fixation_duration = StimInfo["Fixation"]["Duration_s"] # seconds
        fixation_diameter = StimInfo["Fixation"]["Diameter_degrees"] # degrees
        central_exclusion_zone_shape = StimInfo["CentralExclusionZone"]["Shape"]
        central_exclusion_width_degrees = StimInfo["CentralExclusionZone"]["Width_degrees"] # degrees
        central_exclusion_height_degrees = StimInfo["CentralExclusionZone"]["Height_degrees"] # degrees

        mean_range_cols = [ExpInfo["Procedure&Conditions"]["Staircase"]["Mean_cols"]["Minimum"], ExpInfo["Procedure&Conditions"]["Staircase"]["Mean_cols"]["Maximum"]] # columns
        mean_step_cols = ExpInfo["Procedure&Conditions"]["Staircase"]["Mean_cols"]["StepSize"] # columns
        means_cols = np.arange(mean_range_cols[0], mean_range_cols[1] + mean_step_cols, mean_step_cols)
        std_range_cols = [ExpInfo["Procedure&Conditions"]["Staircase"]["StandardDeviation_cols"]["Minimum"], ExpInfo["Procedure&Conditions"]["Staircase"]["StandardDeviation_cols"]["Maximum"]] # columns
        std_step_cols = ExpInfo["Procedure&Conditions"]["Staircase"]["StandardDeviation_cols"]["StepSize"] # columns
        stds_cols = np.arange(std_range_cols[0], std_range_cols[1] + std_step_cols, std_step_cols)
        lapse_rates = np.array(ExpInfo["Procedure&Conditions"]["Staircase"]["LapseRate"])

        STAIRCASE = None # overwrite with selected staircase each trial later
        STIMULUS_DICT = None

        # Ensure hardcoded parameters are correct
        assert StimInfo["Fixation"]["Color"] == "white", "Fixation stimulus should be set to 'white'."
        assert StimInfo["Jitter"]["Type"] == "uniform", "Spatial jitter distribution should be set to 'uniform'."
        assert central_exclusion_zone_shape == "ellipse", "Central exclusion zone shape should be set to 'ellipse'."
      Begin Experiment:
        # get expInfo for initializing the staircase later
        subject_id = expInfo["ID"]
        session_to_load = expInfo["session_to_load"]
        assert session_to_load == "none" or session_to_load == "last" or session_to_load == "all", "session_to_load must be either 'none', 'all' or 'last'."
        session_id_string = expInfo['session']
        data_path = os.path.join("..", "..", "data", "raw")
        print(f"Load sessions from data path as: {data_path}")

        # Pre-compute and select eccentricities
        session_index = int(expInfo["session"]) - 1 # expInfo["session"] starts with "001"
        abs_x_eccentricity_degrees = abs(x_eccentricity_degrees) / 2 # degrees
        abs_y_eccentricity_degrees = abs(y_eccentricity_degrees) / 2 # degrees
        eccentricities_degrees = [[abs_x_eccentricity_degrees, abs_y_eccentricity_degrees], [-abs_x_eccentricity_degrees, abs_y_eccentricity_degrees]] # upper left and right side
        xy_eccentricity_degrees = eccentricities_degrees[session_index % 2]

        # Pre-compute timing
        def get_frames_from_seconds(duration_s):
            refresh_rate = win.getActualFrameRate() # Hz
            return round(refresh_rate * duration_s)

        # name with "_" at the end to avoid clashes with global variables
        # later injected through trial condition files
        stimulus_duration_s_ = StimInfo["GaborPatch"]["Duration_s"]
        stimulus_frames_ = get_frames_from_seconds(stimulus_duration_s_)
        fixation_frames = get_frames_from_seconds(fixation_duration)
        blank_duration_s = StimInfo["Blank"]["Duration_s"]
        blank_frames = get_frames_from_seconds(blank_duration_s)

        # Pre-compute column number

        # Get monitor parameters
        mon = win.monitor
        viewing_distance = mon.getDistance()   # in cm
        screen_width_cm = mon.getWidth()       # in cm

        # Compare with parameters by hand (dialog box)
        assert expInfo['monitor_type'] == win.monitor.name, f"Monitor setting (monitor type) incorrect: {win.monitor.name} (true) != {expInfo['monitor_type']} (given)."
        assert float(expInfo['viewing_distance_cm']) == viewing_distance, f"Monitor setting (viewing distance) incorrect:  {win.monitor.getDistance()} (true) != {float(expInfo['viewing_distance_cm'])} (given)."

        # Calculate screen width in visual degrees
        # Formula: visual_angle = 2 * arctan(size_cm / (2 * distance_cm))
        screen_width_degrees = 2 * np.degrees(np.arctan(screen_width_cm / (2 * viewing_distance)))
        screen_width_cols = int(np.ceil(screen_width_degrees / spacing))

        # Calculate minimum number of columns to cover the screen
        # Add 5 to each side to ensure we cover the whole screen, also edges
        n_col_plus = 5
        max_displacement_cols = int(max(displacement_range_cols[1], -displacement_range_cols[0])) # to allow shifting border
        n_col = screen_width_cols + 2 * max_displacement_cols + 2 * n_col_plus

        # Assure even number of columns
        if n_col % 2 == 1:
            n_col += 1
      Begin Routine:
        trial_variables = {"n_row": None,
            "displacement_cols": None,
            "orientation_degrees": None,
            "stimulus_duration_s": None,
            "instruction": None,
            "session": None,
            "stimulus_frames": None,
            "x_eccentricity_degrees": None,
            "y_eccentricity_degrees": None,
            "state": None,
            "response": None}
    CodeComponent GetTrialConditionSequence
      Code Type = Py
      Begin Experiment:
        # Create and save conditions sequence

        # instruction trials
        instructions_filepath = "../instructions.csv" # hardcoded here
        instruction_conditions_df = pd.read_csv(instructions_filepath)
        instruction_conditions_df['session'] = session_index
        instruction_conditions_df["stimulus_frames"] = instruction_conditions_df["stimulus_duration_s"].apply(get_frames_from_seconds)
        instruction_conditions_df["x_eccentricity_degrees"] = xy_eccentricity_degrees[0]
        instruction_conditions_df["y_eccentricity_degrees"] = xy_eccentricity_degrees[1]
        instruction_conditions_df["state"] = "instruct"
        instruction_conditions_df.to_csv('conditions_temp_instruct.csv', index=False)

        # training trials
        conditions = list(itertools.product(n_rows, displacements_cols, orientations_degrees))

        def sample_from(items, n_samples):
            # sample conditions randomly
            # if n_samples < len(items): just sample randomly
            # else, select all samples (in random order) and sample the remainder
            samples = items * (n_samples // len(items)) + random.sample(items, n_samples % len(items))
            random.shuffle(samples) # in-place shuffeling
            return samples
        conditions = sample_from(conditions, nTrials_train)
        nReps_train = 1

        conditions_df = pd.DataFrame(conditions, columns=['n_row', 'displacement_cols', 'orientation_degrees'])
        conditions_df['session'] = session_index
        conditions_df["stimulus_frames"] = stimulus_frames_
        conditions_df["stimulus_duration_s"] = stimulus_duration_s_
        conditions_df["x_eccentricity_degrees"] = xy_eccentricity_degrees[0]
        conditions_df["y_eccentricity_degrees"] = xy_eccentricity_degrees[1]
        conditions_df["state"] = "train"
        conditions_df["instruction"] = None
        conditions_df.to_csv('conditions_temp_train.csv', index=False)

        # testing trials: psi staircase + randomize over conditions
        conditions = list(itertools.product(n_rows, orientations_degrees))
        nReps_test = int(math.ceil(nTrials_test / len(conditions)))

        def get_key(n_row, orientation_degrees):
            # % 90 to combine staircase inference for symmetrically oriented textures
            return f"n_row={n_row}_orientation_degrees={orientation_degrees % 90}"

        staircases = {}
        for n, o in conditions:
            assert 0 <= o < 180, "Orientations must be in [0, 180) degree range."
            key = get_key(n, o)
            if key not in staircases:
                staircases[key] = questplus.qp.QuestPlus(
                    stim_domain = {"intensity": displacements_cols}, # displacement min & max
                    param_domain = {"mean": means_cols, "sd": stds_cols, "lapse_rate": lapse_rates},
                    outcome_domain = {"response": [1, 0]},
                    func = "norm_cdf_2", # assumes lapse rate == lower asymptote
                    stim_scale = "linear"
                )

        if session_to_load != "none":
            # initialize staircases with data from previous / last session
            for root, _, files in os.walk(data_path):
                directory_name = os.path.basename(root)
                last_session_id_string = f"{int(session_id_string)-1:02d}"
                if (session_to_load == "all" and directory_name[:5] == f"ID{subject_id}") or (session_to_load == "last" and directory_name[:8] == f"ID{subject_id}S{last_session_id_string}"):
                    for key, staircase in staircases.items():
                        for file in files:
                            if file == "questplus_staircase_" + key + ".json":
                                # Load previous stimulus response pairs
                                file_path = os.path.join(root, file)
                                previous_stimuli = []
                                previous_responses = []
                                with open(file_path, 'r') as f:  # Open in text mode
                                    text = f.read()  # Load JSON data
                                    previous_staircase = questplus.qp.QuestPlus.from_json(text)
                                    previous_stimuli = previous_staircase.stim_history
                                    previous_responses = previous_staircase.resp_history

                                # Update staircase
                                print(f"Updating staircase {key} with data {directory_name}/{file}")
                                for stim, resp in zip(previous_stimuli, previous_responses):
                                    # print(stim, resp)
                                    staircase.update(stim = stim, outcome = resp)

        conditions_df = pd.DataFrame(conditions, columns=['n_row', 'orientation_degrees'])
        conditions_df['session'] = session_index
        conditions_df['stimulus_frames'] = stimulus_frames_
        conditions_df['stimulus_duration_s'] = stimulus_duration_s_
        conditions_df['x_eccentricity_degrees'] = xy_eccentricity_degrees[0]
        conditions_df['y_eccentricity_degrees'] = xy_eccentricity_degrees[1]
        conditions_df['state'] = 'test'
        conditions_df["instruction"] = None
        conditions_df.to_csv('conditions_temp_test.csv', index=False)
  Routine Fixation
    RoutineSettingsComponent Fixation
      stopVal [frame N] = fixation_frames
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    CodeComponent SetBackground_2
      Code Type = Py
      Begin Routine:
        win.color = [0, 0, 0] # keep grey background
    PolygonComponent CentralExclusionZone_2
      fillColor = [0,0,0]
      lineWidth = 2
      pos [set every repeat] = (-x_eccentricity_degrees, -y_eccentricity_degrees)
      shape = circle
      size = (central_exclusion_width_degrees, central_exclusion_height_degrees)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent FixationShape_1
      fillColor = white
      pos [set every repeat] = (-x_eccentricity_degrees, -y_eccentricity_degrees)
      shape = circle
      size = (fixation_diameter, fixation_diameter)
      startVal [time (s)] = 0
      units = deg
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  Routine Stimulus
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    CodeComponent SetBackground_3
      Code Type = Py
      Begin Routine:
        win.color = [0, 0, 0] # keep grey background
    CodeComponent UpdateVariablesAndStaircase
      Code Type = Py
      Begin Routine:
        # Update trials variables (from globals)
        for variable_name in trial_variables.keys():
            if variable_name != "response":
                trial_variables[variable_name] = globals().get(variable_name, None)

        # Infer next horizontal displacement
        if trial_variables["state"] == "test": # staircase during testing trials
            key = get_key(trial_variables["n_row"], trial_variables["orientation_degrees"])
            STAIRCASE = staircases[key] # overwrite from previous trial (and "none" initially)
            STIMULUS_DICT = STAIRCASE.next_stim
            trial_variables["displacement_cols"] = STIMULUS_DICT["intensity"]
            if trial_variables["orientation_degrees"] >= 90: # one staircase for symmetric oriented textures
                trial_variables["displacement_cols"] = - trial_variables["displacement_cols"]
      End Routine:
        # Update staircase
        if trial_variables["state"] == "test":
            # staircase: positive == towards the upper texture parallely oriented to border
            if trial_variables["orientation_degrees"] < 90: # right upper texture more parallel to border; TODO: should be 45 instead of 90?
                response = 1 if (GetResponse.keys == "right") else 0
            elif trial_variables["orientation_degrees"] >= 90: # left upper texture more parallel to border; TODO: should be 45 instead of 90?
                response = 1 if (GetResponse.keys == "left") else 0
            STAIRCASE.update(stim=STIMULUS_DICT, outcome={"response": response}) # variable "staircase" and "stimulus_dict" already selected at begin routine
    CodeComponent DisplayStimulus
      Code Type = Py
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      Begin Experiment:
        # Pre-Compute stimuli
        base_xys = {}
        base_oris = {}
        gabor_arrays = {}
        for n_row_ in n_rows: # name n_row_ to avoid overwriting trial loop n_row condition
            # Pre-compute grid
            xs = np.linspace(-spacing * (n_col-1) / 2, spacing * (n_col-1) / 2, n_col)
            ys = np.linspace(0.0, spacing*(n_row_-1), n_row_)

            # Pre-compute locations in 3D: (2, n_row, n_col, 2) for [upper/lower, row, col, xy]
            xys_3d = np.zeros((2, n_row_, n_col, 2))
            for i, y in enumerate(ys):
                for j, x in enumerate(xs):
                    xys_3d[0, i, j] = [x, y + vertical_seperation / 2]  # upper
                    xys_3d[1, i, j] = [x, - y - vertical_seperation / 2]  # lower
            base_xys[n_row_] = xys_3d

            # Pre-compute orientations in 3D: (2, n_row, n_col) for [upper/lower, row, col]
            # upper right texture is 0° (vertically), upper left 90° (horizontally) oriented
            # lower right texture is 90° (horizontally), lower left 0° (vertically) oriented
            oris_3d = np.zeros((2, n_row_, n_col)) # all vertical
            oris_3d[0, :, :n_col // 2] = 90  # upper left horizontal
            oris_3d[1, :, n_col // 2:] = 90 # lower right horizontal
            base_oris[n_row_] = oris_3d

            # Flatten for ElementArrayStim
            xys_flat = xys_3d.reshape(-1, 2)  # Shape: (2*n_row*n_col, 2)
            oris_flat = oris_3d.flatten()     # Shape: (2*n_row*n_col,)

            # Pre-compute Gabor patches
            gabor_array = visual.ElementArrayStim(
                win=win,
                units='deg',
                nElements=2 * n_row_ * n_col,
                elementTex='sin',
                elementMask='gauss',
                xys=xys_flat,
                sizes=spacing,
                sfs=frequency,
                oris=oris_flat,
                contrs=mitchell_contrast
            )
            gabor_arrays[n_row_] = gabor_array
      Begin Routine:
        win.color = [0, 0, 0] # keep grey background

        # randomize location of Gabor patch centers
        jitter = rng.uniform(-jitter_amount, jitter_amount,
                                   size=(2, trial_variables["n_row"], n_col, 2))
        xys_3D = base_xys[trial_variables["n_row"]] + jitter

        # rotate to set orientation
        oris_3D = base_oris[trial_variables["n_row"]] + trial_variables["orientation_degrees"]

        # displace upper texture horizontally
        xys_3D[0, :, :, 0] += spacing * trial_variables["displacement_cols"]

        # set eccentricity of texture
        xys_3D[:, :, :, 0] += trial_variables["x_eccentricity_degrees"]
        xys_3D[:, :, :, 1] += trial_variables["y_eccentricity_degrees"]

        # set and update stimulus
        gabor_array = gabor_arrays[trial_variables["n_row"]]
        gabor_array.xys = xys_3D.reshape(-1, 2)
        gabor_array.oris = oris_3D.flatten()
      Each Frame:
        if frameN < trial_variables["stimulus_frames"]:
            gabor_array.draw()
    CodeComponent DisplayMask
      Code Type = Py
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      Begin Experiment:
        # Pre-compute scrambled stimulus as masks
        mask_arrays = {}
        for n_row_ in n_rows: # name n_row_ to avoid overwriting trial loop n_row condition
            # Pre-compute Gabor patches
            gabor_array = visual.ElementArrayStim(
                win=win,
                units='deg',
                nElements= 2 * n_row_ * n_col,
                elementTex='sin',
                elementMask='gauss',
                # maskParams={"sd": 3}, # sets automatically sd = sigma if spacing == 6 sigma
                xys=base_xys[n_row_].reshape(-1, 2),
                sizes=spacing,
                sfs=frequency,
                oris=base_oris[n_row_].flatten(), # will be overwriten at begin routine
                contrs=mitchell_contrast
            )
            mask_arrays[n_row_] = gabor_array
      Begin Routine:
        # Set mask
        mask_array = mask_arrays[trial_variables["n_row"]]

        # Copy stimulus locations to avoid confusing salient shifts after stimulus
        xys_3D = base_xys[trial_variables["n_row"]] + jitter
        xys_3D[0, :, :, 0] += spacing * trial_variables["displacement_cols"]
        xys_3D[:, :, :, 0] += trial_variables["x_eccentricity_degrees"]
        xys_3D[:, :, :, 1] += trial_variables["y_eccentricity_degrees"]
        mask_array.xys = xys_3D.reshape(-1, 2)

        # But scramble orientation and thus texture
        mask_array.oris = rng.uniform(0, 180, size=2 * trial_variables["n_row"] * n_col)
      Each Frame:
        if frameN >= trial_variables["stimulus_frames"]:
            mask_array.draw()
      End Routine:
        win.color = [0, 0, 0] # keep grey background
    PolygonComponent CentralExclusionZone_3
      fillColor = [0, 0, 0]
      lineWidth = 2
      pos [set every repeat] = (-x_eccentricity_degrees, -y_eccentricity_degrees)
      shape = circle
      size = (central_exclusion_width_degrees, central_exclusion_height_degrees)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent FixationShape_2
      fillColor = white
      pos [set every repeat] = (-x_eccentricity_degrees, -y_eccentricity_degrees)
      shape = circle
      size = (fixation_diameter, fixation_diameter)
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent GetResponse
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent SimulateResponse
      Code Type = Py
      Before Experiment:
        from scipy.stats import norm

        # Psychometrische Funktion (kumulative Normalverteilung)
        def psychometric_function(x, mu=0, sigma=1):
            """
            Berechnet die Wahrscheinlichkeit einer "rechts"-Antwort
            basierend auf einer kumulativen Normalverteilung.

            Parameter:
            x: Stimulus-Intensität oder -Position
            mu: Mittelwert (Point of Subjective Equality, PSE)
            sigma: Standardabweichung (Schwelle)

            Return: Wahrscheinlichkeit zwischen 0 und 1
            """
            return norm.cdf(x, loc=mu, scale=sigma)

        # Simulierte Antwort basierend auf der psychometrischen Funktion
        def simulate_response(stimulus_value, mu=0, sigma=1, left_key='left', right_key='right'):
            """
            Simuliert einen Tastendruck basierend auf der psychometrischen Funktion.

            Parameter:
            stimulus_value: Der aktuelle Stimulus-Wert
            mu: PSE der psychometrischen Funktion
            sigma: Schwelle der psychometrischen Funktion
            left_key: Name der linken Taste
            right_key: Name der rechten Taste

            Return: Tastenname (left_key oder right_key)
            """
            # Wahrscheinlichkeit für "rechts"
            p_right = psychometric_function(stimulus_value, mu, sigma)

            # Sample aus Bernoulli-Verteilung
            response = np.random.rand() < p_right

            return right_key if response else left_key
      Begin Experiment:
        PSE_monkey = 0 # columns
        STD_monkey = 0.5 # columns
        RT_monkey = 0.2 # s
      Each Frame:
        if expInfo.get('monkey_mode', False):
            # simulate response if no key was pressed yet
            if not GetResponse.keys:
                # wait realistrically
                if t > RT_monkey:
                    simulated_key = simulate_response(
                        trial_variables["displacement_cols"],
                        mu=PSE_monkey,
                        sigma=STD_monkey
                    )

                    GetResponse.keys = simulated_key
                    GetResponse.rt = RT_monkey
                    GetResponse.duration = None
                    continueRoutine = False  # force routine end
    CodeComponent SaveTrialData
      Code Type = Py
      End Routine:
        # save trial to trial data
        # possibly redundant for non-staircase loops
        trial_variables["response"] = GetResponse.keys
        for variable_name, variable_value in trial_variables.items():
            thisExp.addData(variable_name, variable_value)
  Routine Blank
    RoutineSettingsComponent Blank
      stopVal [frame N] = blank_frames
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    CodeComponent SetBackground_4
      Code Type = Py
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      Begin Routine:
        win.clearBuffer()
        win.color = [0, 0, 0] # keep grey background
    CodeComponent CheckTimeAndTrialNumber
      Code Type = Py
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      End Routine:
        # check clock
        if track_time and trial_variables["state"] == "test":
            elapsed_time_s = time.time() - practice_start_time_s
            if elapsed_time_s >= MAX_TIME_s:
                # log
                message = f"Time limit reached: {elapsed_time_s/60:.1f} minutes elapsed after {testing_trials.thisN + 1} testing trials"
                print(message)
                logging.info(message)
                logging.exp(message)

                # Add summary data
                thisExp.addData('time_limit_min', MAX_TIME_s / 60)
                thisExp.addData('tracked_time_min', elapsed_time_s / 60)
                thisExp.addData('time_limit_was_reached', True)

                # finish experiment
                testing_trials.finished = True

        # check trial number
        if trial_variables["state"] == "train": # for some valid ExpInfo.yaml settings, there are more training conditions then nTrials_train
            if training_trials.thisN + 1 >= nTrials_train: # + 1 since thisN starts at 0
                training_trials.finished = True
        elif not track_time and trial_variables["state"] == "test": # if not track time, assure right number of trials despite of rounding issues
            if testing_trials.thisN + 1 >= nTrials_test: # + 1 since thisN starts at 0
                testing_trials.finished = True
  Routine Wait
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    CodeComponent SetBackground
      Code Type = Py
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      Begin Routine:
        win.color = [0, 0, 0] # assure grey background
    CodeComponent PrintTrialNumber
      Code Type = Py
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      Begin Experiment:
        TRIAL_COUNT = 0 # start counting with 1
      Begin Routine:
        TRIAL_COUNT += 1
        print(f"{state} trial {TRIAL_COUNT}") # print to note down and refind errors
        thisExp.addData('global.thisN', TRIAL_COUNT) # save to compare with noted down global trial number
    KeyboardComponent AnyButton
      allowedKeys = None
      forceEndRoutine = True
      startVal [frame N] = 10
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    PolygonComponent CentralExclusionZone_1
      fillColor = [0,0,0]
      lineWidth = 2
      pos [set every repeat] = (-x_eccentricity_degrees, -y_eccentricity_degrees)
      shape = circle
      size = (central_exclusion_width_degrees, central_exclusion_height_degrees)
      startVal [time (s)] = 0
      units = deg
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    TextComponent PressAnyButtonForNextTrialText
      letterHeight = 1.0
      pos [set every repeat] = (-x_eccentricity_degrees, -y_eccentricity_degrees)
      startVal [time (s)] = 0
      text [set every repeat] = $"Press any button\nfor %d. trial" % (TRIAL_COUNT)
      units = deg
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    CodeComponent SimulateButtonPress
      Code Type = Py
      Each Frame:
        if expInfo.get('monkey_mode', False):
            # simulate response if no key was pressed yet
            if not AnyButton.keys:
                if t > RT_monkey:
                    AnyButton.keys = "enter"
                    AnyButton.rt = RT_monkey
                    AnyButton.duration = None
                    continueRoutine = False
  Routine Dialogue
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    TextComponent RepeatOrContinueText
      letterHeight = 1
      startVal [time (s)] = 0.2
      units = deg
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      text:
        To repeat, press "r".

        To continue, press "c".
    KeyboardComponent RepeatOrContinueButton
      allowedKeys = 'r','c'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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    CodeComponent FinishLoop
      Code Type = Py
      End Routine:
        if RepeatOrContinueButton.keys == 'c':
            if trial_variables["state"] == 'instruct': # stop instructions
                instruction.finished = True
            elif trial_variables["state"] == 'train': # stop training / practice
                training.finished = True
  Routine Break
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    TextComponent TakeABreakText
      letterHeight = 1.0
      startVal [time (s)] = 0.2
      text = Take a break!
      units = deg
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    KeyboardComponent AnyButton_2
      allowedKeys = None
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine QandASession
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    CodeComponent ShowMouse
      Code Type = Py
      Begin Routine:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
    FormComponent QandAForm
      Data Format = rows
      Font = Noto Sans
      Item Padding = 0.05
      Items = C:/Users/kai.rothe/Documents/V1SH_experiment/experiment/QandA.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      pos = (-0.3, 0)
      responseColor = white
      size = (1.0, 0.9)
      startVal [time (s)] = 0.1
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    ButtonComponent FinishButton
      bold = False
      borderColor = red
      borderWidth = 1
      fillColor = red
      forceEndRoutine = True
      letterHeight = 1
      pos = (10, 0)
      size = (7, 8)
      startVal [time (s)] = 10
      text = Click HERE to finish
      units = deg
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  Routine SaveData
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    CodeComponent SaveAdditionalData
      Code Type = Py
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      Begin Experiment:
        def save_experiment_files_robust():
            """Save experiment files using PsychoPy's auto-generated filename"""
            try:
                # 'filename' is auto-generated by Builder from Experiment Settings
                # It's already the full path without extension
                # E.g., 'data/participant001_myExperiment_2025-11-20_1435'
                dataDir = os.path.dirname(filename)
                baseName = os.path.basename(filename)

                # Files to save: (relative_path, original_filename, extension)
                files_to_save = [
                    ("", expName + '.psyexp', '.psyexp'),
                    ("..", "instructions.csv", '.csv'),
                    ("..", "ExpInfo.yaml", '.yaml'),
                    ("..", "QandA.csv", ".csv")
                ]

                for relative_path, source_filename, ext in files_to_save:
                    # Build the full source path correctly
                    if relative_path:
                        filepath = os.path.join(_thisDir, relative_path, source_filename)
                    else:
                        filepath = os.path.join(_thisDir, source_filename)

                    # Normalize the path to handle ".." properly
                    filepath = os.path.normpath(filepath)

                    print(f"Looking for: {filepath}")  # Debug print

                    if os.path.exists(filepath):
                        # Get modification date
                        modDate = datetime.fromtimestamp(
                            os.path.getmtime(filepath)
                        ).strftime('%Y-%m-%d_%H%M')

                        # Extract just the name without extension for renaming
                        source_base = os.path.splitext(source_filename)[0]

                        # Create destination filename
                        destFilename = f"{source_base}_mod-{modDate}{ext}"
                        destPath = os.path.join(dataDir, destFilename)

                        shutil.copy2(filepath, destPath)
                        print(f"Saved: {destFilename}")
                    else:
                        print(f"File not found: {filepath}")  # Debug print

            except Exception as e:
                logging.error(f'Could not save experiment files: {e}')
                print(f"Error in save_experiment_files_robust: {e}")  # Additional debug

        def get_psychopy_info():
            # Function to dynamically retrieve PsychoPy information
            psychopy_info = {
                "Hardware": {
                    "Display": {
                        "Type": win.monitor.name,
                        "MeanLuminance_cd/m2": expInfo['mean_luminance_cdpm2'],
                        "RefreshRate_Hz": expInfo['frameRate'],
                        "ViewingDistance_cm": expInfo["viewing_distance_cm"],
                        "GammaCorrection": win.monitor.getGammaGrid() is not None
                    },
                    "EyeTracker": {
                        "Usage": False # TODO: Replace with actual eye tracker check
                    }
                }
            }
            return psychopy_info

        def compare_and_update(yaml_file, psychopy_info):
            # Compare psychopy hardware with manual ExpInfo YAML file
            # and update values if necessary
            updated = False
            for section, values in psychopy_info.items():
                if section in yaml_file:
                    for key, value in values.items():
                        if key in yaml_file[section] and yaml_file[section][key] != value:
                            yaml_file[section][key] = value
                            if key != "RandomSeed":
                                updated = True

                else:
                    yaml_file[section] = values
                    updated = True

            if updated:
                print("Warning: ExpInfo file modified.")
                logging.warning("ExpInfo file modified.")

            return updated

        # Save staircase updates
        def eval_and_save_staircase():
            if not staircases:
                print("Warning: eval_and_save_staircase could not be executed (no staircases initialized)")
                logging.warning("eval_and_save_staircase could not be executed (no staircases initialized)")
                return
            else:
                try:
                    for label, staircase_ in staircases.items(): # name "staircase_" to avoid overwriting global STAIRCASE variable
                        # 1. Print out and save parameters
                        params_dict =  staircase_.param_estimate
                        mean, std, lapse_rate = params_dict["mean"], params_dict["sd"], params_dict["lapse_rate"]
                        print(f"Parameter of staircase {label}:\n   mean = {mean}\n   std = {std}\n   lapse_rate = {lapse_rate}")

                        # 'filename' is auto-generated by Builder from Experiment Settings
                        # It's already the full path without extension
                        # E.g., 'data/participant001_myExperiment_2025-11-20_1435'
                        dataDir = os.path.dirname(filename)
                        results_name = "staircase_params" + "_" + label + ".json"
                        save_as = os.path.join(dataDir, results_name)
                        with open(save_as, 'w') as f:
                            json.dump(params_dict, f, indent=2)
                        print(f"Saved: {results_name}")

                        # 2. Save complete staircase for reloading e.g. detailed analysis
                        staircase_name = "questplus_staircase" + "_" + label + ".json"
                        save_as = os.path.join(dataDir, staircase_name)
                        staircase_json_dump = staircase_.to_json() # string
                        with open(save_as, 'w') as f:
                            f.write(staircase_json_dump)
                        print(f"Saved: {staircase_name}")

                        # 3. Save marginal posteriors
                        posterior_name = "questplus_posterior" + "_" + label + ".pkl"
                        save_as = os.path.join(dataDir, posterior_name)
                        posterior_dict = staircase_.marginal_posterior
                        with open(save_as, 'wb') as f:
                            pickle.dump(posterior_dict, f)
                        print(f"Saved: {posterior_name}")

                except Exception as e:
                    raise(e)
                    # logging.error(f'Could not save quest eval: {e}')
                    # print(f"Error in eval_and_save_staircase: {e}")  # Additional debug

        # Update ExpInfo with PsychoPy hardware info
        psychopy_info = get_psychopy_info()
        compare_and_update(ExpInfo, psychopy_info)

        # Save immediately at start
        save_experiment_files_robust()

        # Save at the end, or if computer fails / experiment is stopped by "esc"
        atexit.register(save_experiment_files_robust)
        atexit.register(eval_and_save_staircase)
  Routine End
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    TextComponent ThankYou
      letterHeight = 1.0
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 5.0
      text = Thank you!
      units = deg
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  Routine StartTimer
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    CodeComponent Timer
      Code Type = Py
      Before Experiment:
        import time
      Begin Routine:
        # Start tracking time
        if track_time:
            practice_start_time_s = time.time()

            # log
            message = f"Timer started at {practice_start_time_s / 60} minutes"
            print(message)
            logging.info(message)
            logging.exp(message)

            # Save summary data
            thisExp.addData("practice_start_time_min", practice_start_time_s / 60)
            thisExp.addData("time_was_tracked", True)
            thisExp.addData('time_limit_was_reached', False)
Flow
  Routine Preparation
  LoopInitiator instruction loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999 if expInfo['skip_instructions'] == False else 0
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    LoopInitiator instruction_trials loopType="TrialHandler"
      conditionsFile = conditions_temp_instruct.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('n_row', np.int64(12)), ('displacement_cols', np.float64(2.0)), ('orientation_degrees', np.int64(0)), ('stimulus_duration_s', np.float64(120.0)), ('instruction', 'First a circle in the center is shown. Your task is to look at that circle and keep your gaze fixed on it. Keep your gaze fixed to the center for the whole time. Therewhile you are shown an image with textures. The upper texture has a boundary and the lower texture has a boundary as well. Your task is to decide weather the UPPER boundary is more to the left or the right of the lower texture. If you think that the UPPER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,
        OrderedDict([('n_row', np.int64(12)), ('displacement_cols', np.float64(-2.0)), ('orientation_degrees', np.int64(90)), ('stimulus_duration_s', np.float64(120.0)), ('instruction', ' '), ('session', np.int64(0)), ('stimulus_frames', np.int64(7188)), ('x_eccentricity_degrees', np.float64(5.0)), ('y_eccentricity_degrees', np.float64(2.5)), ('state', 'instruct')]),
        OrderedDict([('n_row', np.int64(12)), ('displacement_cols', np.float64(1.0)), ('orientation_degrees', np.int64(90)), ('stimulus_duration_s', np.float64(120.0)), ('instruction', "Don't forget to always keep your gaze fixed to the center for the whole time. Use the circle to look at the center again."), ('session', np.int64(0)), ('stimulus_frames', np.int64(7195)), ('x_eccentricity_degrees', np.float64(5.0)), ('y_eccentricity_degrees', np.float64(2.5)), ('state', 'instruct')]),
        OrderedDict([('n_row', np.int64(12)), ('displacement_cols', np.float64(-1.0)), ('orientation_degrees', np.int64(0)), ('stimulus_duration_s', np.float64(120.0)), ('instruction', None), ('session', np.int64(0)), ('stimulus_frames', np.int64(7188)), ('x_eccentricity_degrees', np.float64(5.0)), ('y_eccentricity_degrees', np.float64(2.5)), ('state', 'instruct')])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
      Routine Wait
      Routine Fixation
      Routine Stimulus
      Routine Blank
    LoopTerminator instruction_trials
    Routine Dialogue
  LoopTerminator instruction
  Routine StartTimer
  LoopInitiator training loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999 if expInfo['skip_training'] == False else 0
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    LoopInitiator training_trials loopType="TrialHandler"
      conditions = []
      conditionsFile = conditions_temp_train.csv
      loopType = random
      nReps = nReps_train
      random seed = seed + 1
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      Routine Wait
      Routine Fixation
      Routine Stimulus
      Routine Blank
    LoopTerminator training_trials
    Routine Dialogue
  LoopTerminator training
  LoopInitiator testing_trials loopType="TrialHandler"
    conditionsFile = conditions_temp_test.csv
    loopType = random
    nReps = nReps_test if expInfo["skip_testing"] == False else 0
    random seed = seed
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    conditions:
      [OrderedDict([('n_row', np.int64(1)), ('orientation_degrees', np.int64(90)), ('session', np.int64(0)), ('stimulus_frames', np.int64(1)), ('stimulus_duration_s', np.float64(0.02)), ('x_eccentricity_degrees', np.float64(5.0)), ('y_eccentricity_degrees', np.float64(2.5)), ('state', 'test')]),
      OrderedDict([('n_row', np.int64(1)), ('orientation_degrees', np.int64(0)), ('session', np.int64(0)), ('stimulus_frames', np.int64(1)), ('stimulus_duration_s', np.float64(0.02)), ('x_eccentricity_degrees', np.float64(5.0)), ('y_eccentricity_degrees', np.float64(2.5)), ('state', 'test')]),
      OrderedDict([('n_row', np.int64(12)), ('orientation_degrees', np.int64(90)), ('session', np.int64(0)), ('stimulus_frames', np.int64(1)), ('stimulus_duration_s', np.float64(0.02)), ('x_eccentricity_degrees', np.float64(5.0)), ('y_eccentricity_degrees', np.float64(2.5)), ('state', 'test')]),
      OrderedDict([('n_row', np.int64(12)), ('orientation_degrees', np.int64(0)), ('session', np.int64(0)), ('stimulus_frames', np.int64(1)), ('stimulus_duration_s', np.float64(0.02)), ('x_eccentricity_degrees', np.float64(5.0)), ('y_eccentricity_degrees', np.float64(2.5)), ('state', 'test')])]
    Routine Wait
    Routine Fixation
    Routine Stimulus
    Routine Blank
  LoopTerminator testing_trials
  Routine Break
  Routine QandASession
  Routine SaveData
  Routine End
