PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = u'../../data/personal/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'age': '25', 'gender': 'male'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1200]
  expName = v0
  keyboardBackend = PsychToolbox
  runMode = 0
  rush = True
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Routines
  Routine trial
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    CodeComponent Stimulus_2
      Code Type = Py
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      Before Experiment:
        from psychopy import visual
        import numpy as np
        import yaml
        import os

        # Get Experimental Info
        ExpInfo_path = os.path.join(os.path.dirname(__file__), '../ExpInfo.yaml')
        with open(ExpInfo_path, 'r') as f:
            ExpInfo = yaml.safe_load(f)

        StimInfo = ExpInfo["Stimulus"]
      Begin Experiment:
        # Set parameters
        n_rows = StimInfo["Grid"]["Rows"][1]
        n_cols = StimInfo["Grid"]["Columns"]
        vertical_seperation = StimInfo["VerticalSeperation_degrees"]
        sigma = StimInfo["GaborPatch"]["Sigma_degrees"] # degrees
        spacing = StimInfo["GaborPatch"]["PatchSize_sigma"] * sigma  # degrees
        frequency = StimInfo["GaborPatch"]["SpatialFrequency_cpd"] # cycles per degree
        initial_ori = StimInfo["GaborPatch"]["Orientation_degrees"][0] # degrees
        jitter_amount = StimInfo["Jitter"]["Range_sigma"] * sigma  # max jitter in degrees

        # Generate grid
        xs = np.linspace(-spacing*(n_cols-1)/2, spacing*(n_cols-1)/2, n_cols)
        ys = np.linspace(0.0, spacing*(n_rows-1), n_rows)
        xys_upper = np.array([(x, y + vertical_seperation / 2) for y in ys for x in xs])
        xys_lower = np.array([(x, - y - vertical_seperation / 2) for y in ys for x in xs])
        base_grid = np.concatenate([xys_upper, xys_lower])

        # Pre-compute orientations
        oris_upper = np.full((n_rows, n_cols), initial_ori)
        oris_upper[:, n_cols // 2 :] += 90
        oris_lower = np.full((n_rows, n_cols), initial_ori)
        oris_lower[:, : n_cols // 2] += 90
        orientations = np.concatenate([oris_upper.flatten(), oris_lower.flatten()])

        # Pre-compute Gabor patches
        gabor_array = visual.ElementArrayStim(
            win=win,
            units='deg',
            nElements= 2 * n_rows * n_cols,
            elementTex='sin',
            elementMask='gauss',
            xys=base_grid,
            sizes=spacing,
            sfs=frequency,
            oris=orientations,
        )
      Begin Routine:
        # Randomize locations
        jitter = np.random.uniform(-jitter_amount, jitter_amount,
                                   size=(2 * n_rows * n_cols, 2))
        gabor_array.xys = base_grid + jitter

        # Randomize phases
        gabor_array.phases = np.random.uniform(0, 360, size=2 * n_rows * n_cols)
      Each Frame:
        gabor_array.draw()
    CodeComponent Stimulus_1
      Code Type = Py
      disabled = True
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      Before Experiment:
        from psychopy import visual
        import numpy as np
        import yaml
        import os

        # Get Experimental Info
        ExpInfo_path = os.path.join(os.path.dirname(__file__), '../ExpInfo.yaml')
        with open(ExpInfo_path, 'r') as f:
            ExpInfo = yaml.safe_load(f)

        StimInfo = ExpInfo["Stimulus"]
      Begin Experiment:
        # Set parameters
        n_rows = StimInfo["Grid"]["Rows"][1]
        n_cols = StimInfo["Grid"]["Columns"]
        sigma = StimInfo["GaborPatch"]["Sigma_degrees"] # degrees
        spacing = StimInfo["GaborPatch"]["PatchSize_sigma"] * sigma  # degrees
        frequency = StimInfo["GaborPatch"]["SpatialFrequency_cpd"] # cycles per degree
        initial_ori = StimInfo["GaborPatch"]["Orientation_degrees"][0] # degrees
        jitter_amount = StimInfo["Jitter"]["Range_sigma"] * sigma  # max jitter in degrees

        # Generate grid
        xs = np.linspace(-spacing*(n_cols-1)/2, spacing*(n_cols-1)/2, n_cols)
        ys = np.linspace(-spacing*(n_rows-1)/2, spacing*(n_rows-1)/2, n_rows)
        base_grid = np.array([(x, y) for y in ys for x in xs])

        # Pre-compute orientations
        orientations = np.full((n_rows, n_cols), initial_ori)
        orientations[:, n_cols // 2 :] += 90
        orientations = orientations.flatten()

        # Pre-compute Gabor patches
        gabor_array = visual.ElementArrayStim(
            win=win,
            units='deg',
            nElements=n_rows * n_cols,
            elementTex='sin',
            elementMask='gauss',
            xys=base_grid,
            sizes=spacing,
            sfs=frequency,
            oris=orientations,
        )
      Begin Routine:
        # Randomize locations
        jitter = np.random.uniform(-jitter_amount, jitter_amount,
                                   size=(n_rows * n_cols, 2))
        gabor_array.xys = base_grid + jitter

        # Randomize phases
        gabor_array.phases = np.random.uniform(0, 360, size=n_rows * n_cols)
      Each Frame:
        gabor_array.draw()
    KeyboardComponent StopKey
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
